

#i:Ts/Seed = 2 #The random seed
i:Ts/ShowHistoryCountAtInterval = 10000 #This prints out progress while running
i:Ts/NumberOfThreads = 4 # Multithreading

d:Ge/World/HLX = 1. mm
d:Ge/World/HLY = 1. mm
d:Ge/World/HLZ = 1. mm
s:Ge/World/Material = "Vacuum"


# Trying to define silicon detector material
sv:Ma/Substrate/Components = 1 "Silicon"
uv:Ma/Substrate/Fractions = 1 1.0
d:Ma/Substrate/Density = 2.33 g/cm3
d:Ma/Substrate/MeanExcitationEnergy = 173 eV
s:Ma/Substrate/DefaultColor = "green"


# Volume
s:Ge/MyBox/Type     = "TsBox"
s:Ge/MyBox/Material = "Substrate"
s:Ge/MyBox/Parent   = "World"
d:Ge/MyBox/HLX      = 0.5 mm
d:Ge/MyBox/HLY      = 0.5 mm
d:Ge/MyBox/HLZ      = 0.05 mm
i:Ge/MyBox/zbins    = 1
d:Ge/MyBox/TransX   = 0. cm
d:Ge/MyBox/TransY   = 0. m
d:Ge/MyBox/TransZ   = 0. m
d:Ge/MyBox/RotX     = 0. deg
d:Ge/MyBox/RotY     = 0. deg
d:Ge/MyBox/RotZ     = 0. deg


# Beam
s:So/Beam/Type                     = "Beam"
sc:So/Beam/Component                = "BeamPosition"
sc:So/Beam/BeamParticle             = "proton"
dc:So/Beam/BeamEnergy               = 0.2 GeV
uc:So/Beam/BeamEnergySpread         = 0
sc:So/Beam/BeamPositionDistribution = "Gaussian"
sc:So/Beam/BeamPositionCutoffShape  = "Ellipse"
dc:So/Beam/BeamPositionCutoffX      = 10. cm
dc:So/Beam/BeamPositionCutoffY      = 10. cm
dc:So/Beam/BeamPositionSpreadX      = 0.01 mm
dc:So/Beam/BeamPositionSpreadY      = 0.01 mm
sc:So/Beam/BeamAngularDistribution  = "Gaussian"
dc:So/Beam/BeamAngularCutoffX       = 90. deg
dc:So/Beam/BeamAngularCutoffY       = 90. deg
dc:So/Beam/BeamAngularSpreadX       = 0.0001 rad
dc:So/Beam/BeamAngularSpreadY       = 0.0001 rad
ic:So/Beam/NumberOfHistoriesInRun   = 10000000


# Scorer
s:Sc/Total/Quantity                  = "EnergyDeposit"
sv:Sc/Total/Report 		     = 1 "Count_In_Bin" #1 "Sum" # 2 "Sum" "Count_In_Bin"
s:Sc/Total/Component                 = "MyBox"
b:Sc/Total/OutputToConsole           = "FALSE"
s:Sc/Total/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
i:Sc/Total/EBins                     = 100
d:Sc/Total/EBinMin                   = 0.001 MeV
d:Sc/Total/EBinMax                   = 10. MeV
sc:Sc/Total/EBinEnergy               = "IncidentTrack" #"DepositedInStep"
b:Sc/Total/EBinLog 		     = “True”
#sv:Sc/Total/OnlyIncludeParticlesFromProcess = 2 "hadElastic" "protonInelastic"  #2 "hIoni" "eBrem"




s:Sc/Primary/Quantity                  = "EnergyDeposit"
sv:Sc/Primary/Report 		     = 1 "Count_In_Bin" #1 "Sum" # 2 "Sum" "Count_In_Bin"
s:Sc/Primary/Component                 = "MyBox"
b:Sc/Primary/OutputToConsole           = "FALSE"
s:Sc/Primary/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
i:Sc/Primary/EBins                     = 100
d:Sc/Primary/EBinMin                   = 0.001 MeV
d:Sc/Primary/EBinMax                   = 10. MeV
sc:Sc/Primary/EBinEnergy               = "IncidentTrack" #"DepositedInStep"
b:Sc/Primary/EBinLog 		     = “True”
#i:Sc/Primary/XBins 		     = 1
#i:Sc/Primary/YBins 		     = 1
#i:Sc/Primary/ZBins 		     = 3
s:Sc/Primary/OnlyIncludeParticlesOfGeneration = "Primary"






s:Sc/Secondary/Quantity                  = "EnergyDeposit"
sv:Sc/Secondary/Report 		     = 1 "Count_In_Bin" #1 "Sum" # 2 "Sum" "Count_In_Bin"
s:Sc/Secondary/Component                 = "MyBox"
b:Sc/Secondary/OutputToConsole           = "FALSE"
s:Sc/Secondary/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
i:Sc/Secondary/EBins                     = 100
d:Sc/Secondary/EBinMin                   = 0.001 MeV
d:Sc/Secondary/EBinMax                   = 10. MeV
sc:Sc/Secondary/EBinEnergy               = "IncidentTrack" #"DepositedInStep"
b:Sc/Secondary/EBinLog 		     = “True”
#i:Sc/Secondary/XBins 		     = 1
#i:Sc/Secondary/YBins 		     = 1
#i:Sc/Secondary/ZBins 		     = 3
s:Sc/Secondary/OnlyIncludeParticlesOfGeneration = "Secondary"


s:Sc/Si/Quantity = "OriginCount"
s:Sc/Si/Component = "MyBox"
b:Sc/Si/OutputToConsole           = "TRUE"
s:Sc/Si/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
sv:Sc/Si/OnlyIncludeParticlesNamed = 1 "GenericIon(14,*)"

s:Sc/Al/Quantity = "OriginCount"
s:Sc/Al/Component = "MyBox"
b:Sc/Al/OutputToConsole           = "TRUE"
s:Sc/Al/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
sv:Sc/Al/OnlyIncludeParticlesNamed = 1 "GenericIon(13,*)"

s:Sc/Mg/Quantity = "OriginCount"
s:Sc/Mg/Component = "MyBox"
b:Sc/Mg/OutputToConsole           = "TRUE"
s:Sc/Mg/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
sv:Sc/Mg/OnlyIncludeParticlesNamed = 1 "GenericIon(12,*)"

s:Sc/Na/Quantity = "OriginCount"
s:Sc/Na/Component = "MyBox"
b:Sc/Na/OutputToConsole           = "TRUE"
s:Sc/Na/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
sv:Sc/Na/OnlyIncludeParticlesNamed = 1 "GenericIon(11,*)"


# knocks
s:Sc/Knock/Quantity                  = "pka"
s:Sc/Knock/Component                 = "MyBox"
s:Sc/Knock/OutputType 		     = "ASCII"
s:Sc/Knock/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/Knock/OutputToConsole           = "TRUE"
#sv:Sc/Knock/OnlyIncludeParticlesFromProcess = 3 "hadElastic" "protonInelastic" "CoulombScat"
sv:Sc/Knock/OnlyIncludeParticlesNotNamed = 2 "e-" "gamma" #"neutron" "proton"
#s:Sc/Knock/OnlyIncludeIfIncidentParticlesOfGeneration = "Secondary"



# Physics
#d:Ph/Default/CutForAllParticles = 0.05 mm # single range cut to use for all particles

#s:Ph/Default/Type = "QGSP_BERT_HP"

s:Ph/Default/Type = "FTFP_BERT_HP" # Use this for high energy scattering stuff generally

#Ph/Default/Modules = 2 "g4em-standard_SS" "g4h-phy_FTFP_BERT_HP" # This first package here removes multiple scattering for all charged particles. Bad for performance, but gives me every single particle that is coulomb scattered!
#d:Ph/Default/CutForProton = 0.0001 mm # This value makes coulomb recoils happen at a threshold that is decently lower than 27eV, which is where silicon atoms get displaced.


#s:Gr/ViewA/Type              = "OpenGL" #This shows neat graphics
#b:Ts/PauseBeforeQuit = "True"
#Ts/UseQt = "True" #This one makes user interface

# Just setting standard view
d:Gr/ViewA/Theta            = 55 deg
d:Gr/ViewA/Phi              = 20 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg





#b:Gr/ViewA/IncludeStepPoints = "True" #This one shows steps everytime physics happens


