

#i:Ts/Seed = 2 #The random seed
i:Ts/ShowHistoryCountAtInterval = 1000 #This prints out progress while running
i:Ts/NumberOfThreads = 4 # Multithreading

d:Ge/World/HLX = 1. mm
d:Ge/World/HLY = 1. mm
d:Ge/World/HLZ = 1. mm
s:Ge/World/Material = "Vacuum"

# Trying to define silicon detector material
sv:Ma/Substrate/Components = 1 "Silicon"
uv:Ma/Substrate/Fractions = 1 1.0
d:Ma/Substrate/Density = 2.33 g/cm3
d:Ma/Substrate/MeanExcitationEnergy = 173 eV
s:Ma/Substrate/DefaultColor = "green"


# Volume
s:Ge/MyBox/Type     = "TsBox"
s:Ge/MyBox/Material = "Substrate"
s:Ge/MyBox/Parent   = "World"
d:Ge/MyBox/HLX      = 0.5 mm
d:Ge/MyBox/HLY      = 0.5 mm
d:Ge/MyBox/HLZ      = 0.05 mm
i:Ge/MyBox/zbins    = 10
d:Ge/MyBox/TransX   = 0. cm
d:Ge/MyBox/TransY   = 0. m
d:Ge/MyBox/TransZ   = 0. m
d:Ge/MyBox/RotX     = 0. deg
d:Ge/MyBox/RotY     = 0. deg
d:Ge/MyBox/RotZ     = 0. deg


# Beam
s:So/Beam/Type                     = "Beam"
sc:So/Beam/Component                = "BeamPosition"
sc:So/Beam/BeamParticle             = "proton"
dc:So/Beam/BeamEnergy               = 26 GeV
uc:So/Beam/BeamEnergySpread         = 0
sc:So/Beam/BeamPositionDistribution = "Gaussian"
sc:So/Beam/BeamPositionCutoffShape  = "Ellipse"
dc:So/Beam/BeamPositionCutoffX      = 10. cm
dc:So/Beam/BeamPositionCutoffY      = 10. cm
dc:So/Beam/BeamPositionSpreadX      = 0.01 mm
dc:So/Beam/BeamPositionSpreadY      = 0.01 mm
sc:So/Beam/BeamAngularDistribution  = "Gaussian"
dc:So/Beam/BeamAngularCutoffX       = 90. deg
dc:So/Beam/BeamAngularCutoffY       = 90. deg
dc:So/Beam/BeamAngularSpreadX       = 0.0001 rad
dc:So/Beam/BeamAngularSpreadY       = 0.0001 rad
ic:So/Beam/NumberOfHistoriesInRun   = 1000


# Scorer
s:Sc/Score/Quantity                  = "anton"
s:Sc/Score/Component                 = "MyBox"
b:Sc/Score/OutputToConsole           = "TRUE"
s:Sc/Score/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/Score/EBins                     = 5
d:Sc/Score/EBinMin                   = 0. MeV
d:Sc/Score/EBinMax                   = 1. MeV
sc:Sc/Score/EBinEnergy               = "DepositedInStep"
#i:Sc/Score/XBins = 1
#i:Sc/Score/YBins = 1
#i:Sc/Score/ZBins = 3

# knocks
s:Sc/Knock/Quantity                  = "pka"
s:Sc/Knock/Component                 = "MyBox"
s:Sc/Knock/OutputType 		     = "ASCII"
s:Sc/Knock/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/Knock/OutputToConsole           = "TRUE"











# Physics packages
#sv:Ph/Default/Modules = 1 "g4em-standard_opt0"
Ph/Default/Modules = 8 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping" "g4h-phy_QGSP_BERT" "g4h-phy_FTFP_BERT_HP"
#s:Ph/Default/Type = "QGSP_BERT_HP"

s:Gr/ViewA/Type              = "OpenGL" #This shows neat graphics
#b:Ts/PauseBeforeQuit = "True"

# Just setting standard view
d:Gr/ViewA/Theta            = 55 deg
d:Gr/ViewA/Phi              = 20 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg


#Ts/UseQt = "True" #This one makes user interface


#b:Gr/ViewA/IncludeStepPoints = "True" #This one shows steps everytime physics happens


